<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0">
  <Workflow xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q2="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:q1="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Timestamp.DateTime</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:CameraCapture">
          <q1:Index>0</q1:Index>
          <q1:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="q2:CsvWriter">
        <q2:FileName>video\timestamp.csv</q2:FileName>
        <q2:Append>false</q2:Append>
        <q2:Overwrite>false</q2:Overwrite>
        <q2:Suffix>Timestamp</q2:Suffix>
        <q2:IncludeHeader>false</q2:IncludeHeader>
        <q2:Selector>Source.Year,Source.Month,Source.Day,Source.Hour,Source.Minute,Source.Second,Source.Millisecond</q2:Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:VideoWriter">
          <q1:FileName>video\Raw_video.avi</q1:FileName>
          <q1:Suffix>Timestamp</q1:Suffix>
          <q1:Buffered>true</q1:Buffered>
          <q1:Overwrite>false</q1:Overwrite>
          <q1:FourCC>FMP4</q1:FourCC>
          <q1:FrameRate>30</q1:FrameRate>
          <q1:FrameSize>
            <q1:Width>0</q1:Width>
            <q1:Height>0</q1:Height>
          </q1:FrameSize>
          <q1:ResizeInterpolation>NearestNeighbor</q1:ResizeInterpolation>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>0</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Vision.CameraCapture, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timestamp, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.VideoWriter, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>