<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0">
  <Workflow xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q2="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:q1="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:HsvThreshold">
          <q1:Lower>
            <q1:Val0>180</q1:Val0>
            <q1:Val1>192</q1:Val1>
            <q1:Val2>190</q1:Val2>
            <q1:Val3>0</q1:Val3>
          </q1:Lower>
          <q1:Upper>
            <q1:Val0>255</q1:Val0>
            <q1:Val1>255</q1:Val1>
            <q1:Val2>255</q1:Val2>
            <q1:Val3>255</q1:Val3>
          </q1:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:MorphologicalOperator">
          <q1:Size>
            <q1:Width>4</q1:Width>
            <q1:Height>4</q1:Height>
          </q1:Size>
          <q1:Anchor>
            <q1:X>1</q1:X>
            <q1:Y>1</q1:Y>
          </q1:Anchor>
          <q1:Shape>Rectangle</q1:Shape>
          <q1:Iterations>1</q1:Iterations>
          <q1:Operation>Erode</q1:Operation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:CameraCapture">
          <q1:Index>0</q1:Index>
          <q1:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:FindContours">
          <q1:Mode>External</q1:Mode>
          <q1:Method>ChainApproxNone</q1:Method>
          <q1:Offset>
            <q1:X>0</q1:X>
            <q1:Y>0</q1:Y>
          </q1:Offset>
          <q1:MinArea>1500</q1:MinArea>
          <q1:MaxArea>10000</q1:MaxArea>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:MorphologicalOperator">
          <q1:Size>
            <q1:Width>11</q1:Width>
            <q1:Height>11</q1:Height>
          </q1:Size>
          <q1:Anchor>
            <q1:X>1</q1:X>
            <q1:Y>1</q1:Y>
          </q1:Anchor>
          <q1:Shape>Rectangle</q1:Shape>
          <q1:Iterations>1</q1:Iterations>
          <q1:Operation>Close</q1:Operation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:MorphologicalOperator">
          <q1:Size>
            <q1:Width>11</q1:Width>
            <q1:Height>11</q1:Height>
          </q1:Size>
          <q1:Anchor>
            <q1:X>1</q1:X>
            <q1:Y>1</q1:Y>
          </q1:Anchor>
          <q1:Shape>Rectangle</q1:Shape>
          <q1:Iterations>1</q1:Iterations>
          <q1:Operation>Close</q1:Operation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:FindContours">
          <q1:Mode>External</q1:Mode>
          <q1:Method>ChainApproxNone</q1:Method>
          <q1:Offset>
            <q1:X>0</q1:X>
            <q1:Y>0</q1:Y>
          </q1:Offset>
          <q1:MinArea xsi:nil="true" />
          <q1:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Centroid</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:HsvThreshold">
          <q1:Lower>
            <q1:Val0>57</q1:Val0>
            <q1:Val1>44</q1:Val1>
            <q1:Val2>126</q1:Val2>
            <q1:Val3>0</q1:Val3>
          </q1:Lower>
          <q1:Upper>
            <q1:Val0>114</q1:Val0>
            <q1:Val1>107</q1:Val1>
            <q1:Val2>211</q1:Val2>
            <q1:Val3>255</q1:Val3>
          </q1:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Centroid</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:VideoWriter">
          <q1:FileName>redchannel.avi</q1:FileName>
          <q1:Suffix>None</q1:Suffix>
          <q1:Buffered>true</q1:Buffered>
          <q1:Overwrite>false</q1:Overwrite>
          <q1:FourCC>FMP4</q1:FourCC>
          <q1:FrameRate>30</q1:FrameRate>
          <q1:FrameSize>
            <q1:Width>0</q1:Width>
            <q1:Height>0</q1:Height>
          </q1:FrameSize>
          <q1:ResizeInterpolation>NearestNeighbor</q1:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:VideoWriter">
          <q1:FileName>whitechannel.avi</q1:FileName>
          <q1:Suffix>None</q1:Suffix>
          <q1:Buffered>true</q1:Buffered>
          <q1:Overwrite>false</q1:Overwrite>
          <q1:FourCC>FMP4</q1:FourCC>
          <q1:FrameRate>30</q1:FrameRate>
          <q1:FrameSize>
            <q1:Width>0</q1:Width>
            <q1:Height>0</q1:Height>
          </q1:FrameSize>
          <q1:ResizeInterpolation>NearestNeighbor</q1:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:VideoWriter">
          <q1:FileName>rgb.avi</q1:FileName>
          <q1:Suffix>None</q1:Suffix>
          <q1:Buffered>true</q1:Buffered>
          <q1:Overwrite>false</q1:Overwrite>
          <q1:FourCC>FMP4</q1:FourCC>
          <q1:FrameRate>30</q1:FrameRate>
          <q1:FrameSize>
            <q1:Width>0</q1:Width>
            <q1:Height>0</q1:Height>
          </q1:FrameSize>
          <q1:ResizeInterpolation>NearestNeighbor</q1:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="q2:CsvWriter">
        <q2:Append>false</q2:Append>
        <q2:Overwrite>false</q2:Overwrite>
        <q2:Suffix>None</q2:Suffix>
        <q2:IncludeHeader>false</q2:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>16</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>0</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>0</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>13</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>17</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>14</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>9</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>11</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>12</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>13</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>13</From>
        <To>15</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>14</From>
        <To>18</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Vision.HsvThreshold, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Grayscale, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.MorphologicalOperator, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.CameraCapture, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.FindContours, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.LargestBinaryRegion, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.BinaryRegionAnalysis, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.VideoWriter, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>